---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start iat_sequence
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/maria/Downloads"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set bidi yes
set background black

define form_multiple_choice TAIprevios
	set timeout infinite
	set spacing 10
	set question "¿Cuántos Test de Asociación Implícita (TAI) has hecho antes?"
	__options__
	0
	1
	2
	3-5
	6+
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice afinidadCienciasBasicas
	set timeout infinite
	set spacing 10
	set question "Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	__options__
	Muy positiva
	Positiva
	Ni positiva ni negativa
	Negativa
	Muy negativa
	__end__
	set margins "50;50;50;50"
	set form_var afinidadCienciasBasicas
	set form_title "Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	set description "Sesgos Explícitos"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run initial_target_association_instructions always
	run wait_spacebar always
	run initial_target always
	run initial_category_instructions always
	run wait_spacebar always
	run initial_category always
	run combined_practice_instructions always
	run wait_spacebar always
	run combined_practice always
	run combined_critical_1_instructions always
	run wait_spacebar always
	run combined_critical_1 always
	run reversed_target_instructions always
	run wait_spacebar always
	run reversed_target always
	run combined_practice_2_instructions always
	run wait_spacebar always
	run combined_practice_2 always
	run combined_critical_2_instructions always
	run wait_spacebar always
	run combined_critical_2 always

define form_text_input canton
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Cantón de residencia actual"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input cantonAnterior
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	__form_question__
	Si has antes vivías en otra parte del país, contános cuál era tu cantón de residencia anterior (si no aplica ponés "N/A")
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input carrera1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "¿Cuál es tu opción 1 en cuanto a las carreras de tu preferencia?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input carrera2
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "¿Cuál es tu opción 2 en cuanto a las carreras de tu preferencia?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop combined_critical_1
	set source_file "CSV - combined critical.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 29
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Niña
	setcycle 0 category Femenino
	setcycle 0 correct_response i
	setcycle 0 stimuli_color "#008000"
	setcycle 0 combined_critical 1
	setcycle 1 stimuli Femenino
	setcycle 1 category Femenino
	setcycle 1 correct_response i
	setcycle 1 stimuli_color "#008000"
	setcycle 1 combined_critical 1
	setcycle 2 stimuli Tía
	setcycle 2 category Femenino
	setcycle 2 correct_response i
	setcycle 2 stimuli_color "#008000"
	setcycle 2 combined_critical 1
	setcycle 3 stimuli Hija
	setcycle 3 category Femenino
	setcycle 3 correct_response i
	setcycle 3 stimuli_color "#008000"
	setcycle 3 combined_critical 1
	setcycle 4 stimuli Esposa
	setcycle 4 category Femenino
	setcycle 4 correct_response i
	setcycle 4 stimuli_color "#008000"
	setcycle 4 combined_critical 1
	setcycle 5 stimuli Mujer
	setcycle 5 category Femenino
	setcycle 5 correct_response i
	setcycle 5 stimuli_color "#008000"
	setcycle 5 combined_critical 1
	setcycle 6 stimuli Madre
	setcycle 6 category Femenino
	setcycle 6 correct_response i
	setcycle 6 stimuli_color "#008000"
	setcycle 6 combined_critical 1
	setcycle 7 stimuli Abuela
	setcycle 7 category Femenino
	setcycle 7 correct_response i
	setcycle 7 stimuli_color "#008000"
	setcycle 7 combined_critical 1
	setcycle 8 stimuli Hombre
	setcycle 8 category Masculino
	setcycle 8 correct_response e
	setcycle 8 stimuli_color "#008000"
	setcycle 8 combined_critical 1
	setcycle 9 stimuli Niño
	setcycle 9 category Masculino
	setcycle 9 correct_response e
	setcycle 9 stimuli_color "#008000"
	setcycle 9 combined_critical 1
	setcycle 10 stimuli Padre
	setcycle 10 category Masculino
	setcycle 10 correct_response e
	setcycle 10 stimuli_color "#008000"
	setcycle 10 combined_critical 1
	setcycle 11 stimuli Masculino
	setcycle 11 category Masculino
	setcycle 11 correct_response e
	setcycle 11 stimuli_color "#008000"
	setcycle 11 combined_critical 1
	setcycle 12 stimuli Abuelo
	setcycle 12 category Masculino
	setcycle 12 correct_response e
	setcycle 12 stimuli_color "#008000"
	setcycle 12 combined_critical 1
	setcycle 13 stimuli Esposo
	setcycle 13 category Masculino
	setcycle 13 correct_response e
	setcycle 13 stimuli_color "#008000"
	setcycle 13 combined_critical 1
	setcycle 14 stimuli Hijo
	setcycle 14 category Masculino
	setcycle 14 correct_response e
	setcycle 14 stimuli_color "#008000"
	setcycle 14 combined_critical 1
	setcycle 15 stimuli Tío
	setcycle 15 category Masculino
	setcycle 15 correct_response e
	setcycle 15 stimuli_color "#008000"
	setcycle 15 combined_critical 1
	setcycle 16 stimuli Filosofía
	setcycle 16 category "Ciencias Sociales"
	setcycle 16 correct_response e
	setcycle 16 stimuli_color "#FFFFFF"
	setcycle 16 combined_critical 1
	setcycle 17 stimuli Humanidades
	setcycle 17 category "Ciencias Sociales"
	setcycle 17 correct_response e
	setcycle 17 stimuli_color "#FFFFFF"
	setcycle 17 combined_critical 1
	setcycle 18 stimuli Arte
	setcycle 18 category "Ciencias Sociales"
	setcycle 18 correct_response e
	setcycle 18 stimuli_color "#FFFFFF"
	setcycle 18 combined_critical 1
	setcycle 19 stimuli Literatura
	setcycle 19 category "Ciencias Sociales"
	setcycle 19 correct_response e
	setcycle 19 stimuli_color "#FFFFFF"
	setcycle 19 combined_critical 1
	setcycle 20 stimuli Música
	setcycle 20 category "Ciencias Sociales"
	setcycle 20 correct_response e
	setcycle 20 stimuli_color "#FFFFFF"
	setcycle 20 combined_critical 1
	setcycle 21 stimuli Historia
	setcycle 21 category "Ciencias Sociales"
	setcycle 21 correct_response e
	setcycle 21 stimuli_color "#FFFFFF"
	setcycle 21 combined_critical 1
	setcycle 22 stimuli Biología
	setcycle 22 category "Ciencias Exactas"
	setcycle 22 correct_response i
	setcycle 22 stimuli_color "#FFFFFF"
	setcycle 22 combined_critical 1
	setcycle 23 stimuli Física
	setcycle 23 category "Ciencias Exactas"
	setcycle 23 correct_response i
	setcycle 23 stimuli_color "#FFFFFF"
	setcycle 23 combined_critical 1
	setcycle 24 stimuli Química
	setcycle 24 category "Ciencias Exactas"
	setcycle 24 correct_response i
	setcycle 24 stimuli_color "#FFFFFF"
	setcycle 24 combined_critical 1
	setcycle 25 stimuli Matemáticas
	setcycle 25 category "Ciencias Exactas"
	setcycle 25 correct_response i
	setcycle 25 stimuli_color "#FFFFFF"
	setcycle 25 combined_critical 1
	setcycle 26 stimuli Geología
	setcycle 26 category "Ciencias Exactas"
	setcycle 26 correct_response i
	setcycle 26 stimuli_color "#FFFFFF"
	setcycle 26 combined_critical 1
	setcycle 27 stimuli Astronomía
	setcycle 27 category "Ciencias Exactas"
	setcycle 27 correct_response i
	setcycle 27 stimuli_color "#FFFFFF"
	setcycle 27 combined_critical 1
	setcycle 28 stimuli Ingienería
	setcycle 28 category "Ciencias Exactas"
	setcycle 28 correct_response i
	setcycle 28 stimuli_color "#FFFFFF"
	setcycle 28 combined_critical 1
	run combined_critical_sequence_1

define sketchpad combined_critical_1_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<span style='color:yellow;font-weight:bold'>Clasifique las mismas cuatro categorías nuevamente.</span> Recuerde ir tan rápido como le sea posible, cometiendo la menor cantidad de errores. <br /><br />La etiqueta <span style='color:green;font-weight:bold'>verde</span> y <b>blanco</b> pueden ayudarlo a identificar la categoría apropiada. Use las teclas <span style='color:yellow;font-weight:bold'>E</span> e <span style='color:yellow;font-weight:bold'>I</span> para categorizar los cuatro grupos, para corregir los errores presione cualquier tecla." x=-480 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la barra espaciadora para comenzar." x=0 y=256 z_index=0

define loop combined_critical_2
	set source_file "CSV reversed critical.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 29
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Niña
	setcycle 0 category Femenino
	setcycle 0 correct_response i
	setcycle 0 stimuli_color "#008000"
	setcycle 0 combined_critical 2
	setcycle 1 stimuli Femenino
	setcycle 1 category Femenino
	setcycle 1 correct_response i
	setcycle 1 stimuli_color "#008000"
	setcycle 1 combined_critical 2
	setcycle 2 stimuli Tía
	setcycle 2 category Femenino
	setcycle 2 correct_response i
	setcycle 2 stimuli_color "#008000"
	setcycle 2 combined_critical 2
	setcycle 3 stimuli Hija
	setcycle 3 category Femenino
	setcycle 3 correct_response i
	setcycle 3 stimuli_color "#008000"
	setcycle 3 combined_critical 2
	setcycle 4 stimuli Esposa
	setcycle 4 category Femenino
	setcycle 4 correct_response i
	setcycle 4 stimuli_color "#008000"
	setcycle 4 combined_critical 2
	setcycle 5 stimuli Mujer
	setcycle 5 category Femenino
	setcycle 5 correct_response i
	setcycle 5 stimuli_color "#008000"
	setcycle 5 combined_critical 2
	setcycle 6 stimuli Madre
	setcycle 6 category Femenino
	setcycle 6 correct_response i
	setcycle 6 stimuli_color "#008000"
	setcycle 6 combined_critical 2
	setcycle 7 stimuli Abuela
	setcycle 7 category Femenino
	setcycle 7 correct_response i
	setcycle 7 stimuli_color "#008000"
	setcycle 7 combined_critical 2
	setcycle 8 stimuli Hombre
	setcycle 8 category Masculino
	setcycle 8 correct_response e
	setcycle 8 stimuli_color "#008000"
	setcycle 8 combined_critical 2
	setcycle 9 stimuli Niño
	setcycle 9 category Masculino
	setcycle 9 correct_response e
	setcycle 9 stimuli_color "#008000"
	setcycle 9 combined_critical 2
	setcycle 10 stimuli Padre
	setcycle 10 category Masculino
	setcycle 10 correct_response e
	setcycle 10 stimuli_color "#008000"
	setcycle 10 combined_critical 2
	setcycle 11 stimuli Masculino
	setcycle 11 category Masculino
	setcycle 11 correct_response e
	setcycle 11 stimuli_color "#008000"
	setcycle 11 combined_critical 2
	setcycle 12 stimuli Abuelo
	setcycle 12 category Masculino
	setcycle 12 correct_response e
	setcycle 12 stimuli_color "#008000"
	setcycle 12 combined_critical 2
	setcycle 13 stimuli Esposo
	setcycle 13 category Masculino
	setcycle 13 correct_response e
	setcycle 13 stimuli_color "#008000"
	setcycle 13 combined_critical 2
	setcycle 14 stimuli Hijo
	setcycle 14 category Masculino
	setcycle 14 correct_response e
	setcycle 14 stimuli_color "#008000"
	setcycle 14 combined_critical 2
	setcycle 15 stimuli Tío
	setcycle 15 category Masculino
	setcycle 15 correct_response e
	setcycle 15 stimuli_color "#008000"
	setcycle 15 combined_critical 2
	setcycle 16 stimuli Filosofía
	setcycle 16 category "Ciencias Sociales"
	setcycle 16 correct_response i
	setcycle 16 stimuli_color "#FFFFFF"
	setcycle 16 combined_critical 2
	setcycle 17 stimuli Humanidades
	setcycle 17 category "Ciencias Sociales"
	setcycle 17 correct_response i
	setcycle 17 stimuli_color "#FFFFFF"
	setcycle 17 combined_critical 2
	setcycle 18 stimuli Arte
	setcycle 18 category "Ciencias Sociales"
	setcycle 18 correct_response i
	setcycle 18 stimuli_color "#FFFFFF"
	setcycle 18 combined_critical 2
	setcycle 19 stimuli Literatura
	setcycle 19 category "Ciencias Sociales"
	setcycle 19 correct_response i
	setcycle 19 stimuli_color "#FFFFFF"
	setcycle 19 combined_critical 2
	setcycle 20 stimuli Música
	setcycle 20 category "Ciencias Sociales"
	setcycle 20 correct_response i
	setcycle 20 stimuli_color "#FFFFFF"
	setcycle 20 combined_critical 2
	setcycle 21 stimuli Historia
	setcycle 21 category "Ciencias Sociales"
	setcycle 21 correct_response i
	setcycle 21 stimuli_color "#FFFFFF"
	setcycle 21 combined_critical 2
	setcycle 22 stimuli Biología
	setcycle 22 category "Ciencias Exactas"
	setcycle 22 correct_response e
	setcycle 22 stimuli_color "#FFFFFF"
	setcycle 22 combined_critical 2
	setcycle 23 stimuli Física
	setcycle 23 category "Ciencias Exactas"
	setcycle 23 correct_response e
	setcycle 23 stimuli_color "#FFFFFF"
	setcycle 23 combined_critical 2
	setcycle 24 stimuli Química
	setcycle 24 category "Ciencias Exactas"
	setcycle 24 correct_response e
	setcycle 24 stimuli_color "#FFFFFF"
	setcycle 24 combined_critical 2
	setcycle 25 stimuli Matemáticas
	setcycle 25 category "Ciencias Exactas"
	setcycle 25 correct_response e
	setcycle 25 stimuli_color "#FFFFFF"
	setcycle 25 combined_critical 2
	setcycle 26 stimuli Geología
	setcycle 26 category "Ciencias Exactas"
	setcycle 26 correct_response e
	setcycle 26 stimuli_color "#FFFFFF"
	setcycle 26 combined_critical 2
	setcycle 27 stimuli Astronomía
	setcycle 27 category "Ciencias Exactas"
	setcycle 27 correct_response e
	setcycle 27 stimuli_color "#FFFFFF"
	setcycle 27 combined_critical 2
	setcycle 28 stimuli Ingienería
	setcycle 28 category "Ciencias Exactas"
	setcycle 28 correct_response e
	setcycle 28 stimuli_color "#FFFFFF"
	setcycle 28 combined_critical 2
	run combined_critical_sequence_2

define sketchpad combined_critical_2_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<span style='color:yellow;font-weight:bold'>Clasifique las mismas cuatro categorías nuevamente.</span> Recuerde ir tan rápido como le sea posible, cometiendo la menor cantidad de errores. <br /><br />La etiqueta <span style='color:green;font-weight:bold'>verde</span> y <b>blanco</b> pueden ayudarlo a identificar la categoría apropiada. Use las teclas <span style='color:yellow;font-weight:bold'>E</span> e <span style='color:yellow;font-weight:bold'>I</span> para categorizar los cuatro grupos, para corregir los errores presione cualquier tecla." x=-480 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la barra espaciadora para comenzar." x=0 y=288 z_index=0

define sketchpad combined_critical_association_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad combined_critical_association_1_wrong
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define sketchpad combined_critical_association_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad combined_critical_association_2_wrong
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define logger combined_critical_logger_2
	set description "Logs experimental data"
	set auto_log yes

define sequence combined_critical_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1 always
	run combined_critical_association_1 always
	run key_combined_critical_1 always
	run combined_critical_association_1_wrong "[correct] = 0"
	run combined_critical_logger_2 always

define sequence combined_critical_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1 always
	run combined_critical_association_2 always
	run key_combined_critical_2 always
	run combined_critical_association_2_wrong "[correct] = 0"
	run combined_critical_logger_2 always

define loop combined_practice
	set source_file "CSV - combined critical.csv"
	set source file
	set repeat 0.7
	set order random
	set description "Repeatedly runs another item"
	set cycles 29
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Niña
	setcycle 0 category Femenino
	setcycle 0 correct_response i
	setcycle 0 stimuli_color "#008000"
	setcycle 1 stimuli Femenino
	setcycle 1 category Femenino
	setcycle 1 correct_response i
	setcycle 1 stimuli_color "#008000"
	setcycle 2 stimuli Tía
	setcycle 2 category Femenino
	setcycle 2 correct_response i
	setcycle 2 stimuli_color "#008000"
	setcycle 3 stimuli Hija
	setcycle 3 category Femenino
	setcycle 3 correct_response i
	setcycle 3 stimuli_color "#008000"
	setcycle 4 stimuli Esposa
	setcycle 4 category Femenino
	setcycle 4 correct_response i
	setcycle 4 stimuli_color "#008000"
	setcycle 5 stimuli Mujer
	setcycle 5 category Femenino
	setcycle 5 correct_response i
	setcycle 5 stimuli_color "#008000"
	setcycle 6 stimuli Madre
	setcycle 6 category Femenino
	setcycle 6 correct_response i
	setcycle 6 stimuli_color "#008000"
	setcycle 7 stimuli Abuela
	setcycle 7 category Femenino
	setcycle 7 correct_response i
	setcycle 7 stimuli_color "#008000"
	setcycle 8 stimuli Hombre
	setcycle 8 category Masculino
	setcycle 8 correct_response e
	setcycle 8 stimuli_color "#008000"
	setcycle 9 stimuli Niño
	setcycle 9 category Masculino
	setcycle 9 correct_response e
	setcycle 9 stimuli_color "#008000"
	setcycle 10 stimuli Padre
	setcycle 10 category Masculino
	setcycle 10 correct_response e
	setcycle 10 stimuli_color "#008000"
	setcycle 11 stimuli Masculino
	setcycle 11 category Masculino
	setcycle 11 correct_response e
	setcycle 11 stimuli_color "#008000"
	setcycle 12 stimuli Abuelo
	setcycle 12 category Masculino
	setcycle 12 correct_response e
	setcycle 12 stimuli_color "#008000"
	setcycle 13 stimuli Esposo
	setcycle 13 category Masculino
	setcycle 13 correct_response e
	setcycle 13 stimuli_color "#008000"
	setcycle 14 stimuli Hijo
	setcycle 14 category Masculino
	setcycle 14 correct_response e
	setcycle 14 stimuli_color "#008000"
	setcycle 15 stimuli Tío
	setcycle 15 category Masculino
	setcycle 15 correct_response e
	setcycle 15 stimuli_color "#008000"
	setcycle 16 stimuli Filosofía
	setcycle 16 category "Ciencias Sociales"
	setcycle 16 correct_response e
	setcycle 16 stimuli_color "#FFFFFF"
	setcycle 17 stimuli Humanidades
	setcycle 17 category "Ciencias Sociales"
	setcycle 17 correct_response e
	setcycle 17 stimuli_color "#FFFFFF"
	setcycle 18 stimuli Arte
	setcycle 18 category "Ciencias Sociales"
	setcycle 18 correct_response e
	setcycle 18 stimuli_color "#FFFFFF"
	setcycle 19 stimuli Literatura
	setcycle 19 category "Ciencias Sociales"
	setcycle 19 correct_response e
	setcycle 19 stimuli_color "#FFFFFF"
	setcycle 20 stimuli Música
	setcycle 20 category "Ciencias Sociales"
	setcycle 20 correct_response e
	setcycle 20 stimuli_color "#FFFFFF"
	setcycle 21 stimuli Historia
	setcycle 21 category "Ciencias Sociales"
	setcycle 21 correct_response e
	setcycle 21 stimuli_color "#FFFFFF"
	setcycle 22 stimuli Biología
	setcycle 22 category "Ciencias Exactas"
	setcycle 22 correct_response i
	setcycle 22 stimuli_color "#FFFFFF"
	setcycle 23 stimuli Física
	setcycle 23 category "Ciencias Exactas"
	setcycle 23 correct_response i
	setcycle 23 stimuli_color "#FFFFFF"
	setcycle 24 stimuli Química
	setcycle 24 category "Ciencias Exactas"
	setcycle 24 correct_response i
	setcycle 24 stimuli_color "#FFFFFF"
	setcycle 25 stimuli Matemáticas
	setcycle 25 category "Ciencias Exactas"
	setcycle 25 correct_response i
	setcycle 25 stimuli_color "#FFFFFF"
	setcycle 26 stimuli Geología
	setcycle 26 category "Ciencias Exactas"
	setcycle 26 correct_response i
	setcycle 26 stimuli_color "#FFFFFF"
	setcycle 27 stimuli Astronomía
	setcycle 27 category "Ciencias Exactas"
	setcycle 27 correct_response i
	setcycle 27 stimuli_color "#FFFFFF"
	setcycle 28 stimuli Ingienería
	setcycle 28 category "Ciencias Exactas"
	setcycle 28 correct_response i
	setcycle 28 stimuli_color "#FFFFFF"
	run combined_practice_sequence

define loop combined_practice_2
	set source file
	set repeat 0.7
	set order random
	set description "Repeatedly runs another item"
	set cycles 29
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Niña
	setcycle 0 category Femenino
	setcycle 0 correct_response i
	setcycle 0 stimuli_color "#008000"
	setcycle 1 stimuli Femenino
	setcycle 1 category Femenino
	setcycle 1 correct_response i
	setcycle 1 stimuli_color "#008000"
	setcycle 2 stimuli Tía
	setcycle 2 category Femenino
	setcycle 2 correct_response i
	setcycle 2 stimuli_color "#008000"
	setcycle 3 stimuli Hija
	setcycle 3 category Femenino
	setcycle 3 correct_response i
	setcycle 3 stimuli_color "#008000"
	setcycle 4 stimuli Esposa
	setcycle 4 category Femenino
	setcycle 4 correct_response i
	setcycle 4 stimuli_color "#008000"
	setcycle 5 stimuli Mujer
	setcycle 5 category Femenino
	setcycle 5 correct_response i
	setcycle 5 stimuli_color "#008000"
	setcycle 6 stimuli Madre
	setcycle 6 category Femenino
	setcycle 6 correct_response i
	setcycle 6 stimuli_color "#008000"
	setcycle 7 stimuli Abuela
	setcycle 7 category Femenino
	setcycle 7 correct_response i
	setcycle 7 stimuli_color "#008000"
	setcycle 8 stimuli Hombre
	setcycle 8 category Masculino
	setcycle 8 correct_response e
	setcycle 8 stimuli_color "#008000"
	setcycle 9 stimuli Niño
	setcycle 9 category Masculino
	setcycle 9 correct_response e
	setcycle 9 stimuli_color "#008000"
	setcycle 10 stimuli Padre
	setcycle 10 category Masculino
	setcycle 10 correct_response e
	setcycle 10 stimuli_color "#008000"
	setcycle 11 stimuli Masculino
	setcycle 11 category Masculino
	setcycle 11 correct_response e
	setcycle 11 stimuli_color "#008000"
	setcycle 12 stimuli Abuelo
	setcycle 12 category Masculino
	setcycle 12 correct_response e
	setcycle 12 stimuli_color "#008000"
	setcycle 13 stimuli Esposo
	setcycle 13 category Masculino
	setcycle 13 correct_response e
	setcycle 13 stimuli_color "#008000"
	setcycle 14 stimuli Hijo
	setcycle 14 category Masculino
	setcycle 14 correct_response e
	setcycle 14 stimuli_color "#008000"
	setcycle 15 stimuli Tío
	setcycle 15 category Masculino
	setcycle 15 correct_response e
	setcycle 15 stimuli_color "#008000"
	setcycle 16 stimuli Filosofía
	setcycle 16 category "Ciencias Sociales"
	setcycle 16 correct_response i
	setcycle 16 stimuli_color "#FFFFFF"
	setcycle 17 stimuli Humanidades
	setcycle 17 category "Ciencias Sociales"
	setcycle 17 correct_response i
	setcycle 17 stimuli_color "#FFFFFF"
	setcycle 18 stimuli Arte
	setcycle 18 category "Ciencias Sociales"
	setcycle 18 correct_response i
	setcycle 18 stimuli_color "#FFFFFF"
	setcycle 19 stimuli Literatura
	setcycle 19 category "Ciencias Sociales"
	setcycle 19 correct_response i
	setcycle 19 stimuli_color "#FFFFFF"
	setcycle 20 stimuli Música
	setcycle 20 category "Ciencias Sociales"
	setcycle 20 correct_response i
	setcycle 20 stimuli_color "#FFFFFF"
	setcycle 21 stimuli Historia
	setcycle 21 category "Ciencias Sociales"
	setcycle 21 correct_response i
	setcycle 21 stimuli_color "#FFFFFF"
	setcycle 22 stimuli Biología
	setcycle 22 category "Ciencias Exactas"
	setcycle 22 correct_response e
	setcycle 22 stimuli_color "#FFFFFF"
	setcycle 23 stimuli Física
	setcycle 23 category "Ciencias Exactas"
	setcycle 23 correct_response e
	setcycle 23 stimuli_color "#FFFFFF"
	setcycle 24 stimuli Química
	setcycle 24 category "Ciencias Exactas"
	setcycle 24 correct_response e
	setcycle 24 stimuli_color "#FFFFFF"
	setcycle 25 stimuli Matemáticas
	setcycle 25 category "Ciencias Exactas"
	setcycle 25 correct_response e
	setcycle 25 stimuli_color "#FFFFFF"
	setcycle 26 stimuli Geología
	setcycle 26 category "Ciencias Exactas"
	setcycle 26 correct_response e
	setcycle 26 stimuli_color "#FFFFFF"
	setcycle 27 stimuli Astronomía
	setcycle 27 category "Ciencias Exactas"
	setcycle 27 correct_response e
	setcycle 27 stimuli_color "#FFFFFF"
	setcycle 28 stimuli Ingienería
	setcycle 28 category "Ciencias Exactas"
	setcycle 28 correct_response e
	setcycle 28 stimuli_color "#FFFFFF"
	run combined_practice_sequence_2

define sketchpad combined_practice_2_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<span style='color:yellow;font-weight:bold'>Fíjese arriba, las cuatro categorías aparecen ahora en una nueva configuración.</span> Recuerde, cada concepto pertenece a una sola categoría. <br /><br />Las etiquetas <span style='color:green;font-weight:bold'>verde</span> y <b>blanco</b> pueden ayudarlo a identificar la categoría apropiada. Use las teclas <span style='color:yellow;font-weight:bold'>E</span> e <span style='color:yellow;font-weight:bold'>I</span> para categorizar los cuatro grupos, para corregir los errores presione cualquier tecla." x=-480 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la barra espaciadora para comenzar." x=0 y=256 z_index=0

define sketchpad combined_practice_association
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad combined_practice_association_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad combined_practice_association_2_wrong
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define sketchpad combined_practice_association_wrong
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="[stimuli_color]" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define sketchpad combined_practice_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-320 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<span style='color:yellow;font-weight:bold'>Fíjese arriba, las cuatro categorías que vío separadas ahora<br>aparecen juntas.</span> Recuerde, cada item pertenece a un solo grupo. Por<br> ejemplo si la categoría <span style='color:yellow;font-weight:bold'>Ciencias Sociales</span> y <span style='color:yellow;font-weight:bold'>Masculino</span> aparecen en diferentes partes de la pantalla, en significado de palabras <span style='color:yellow;font-weight:bold'>Tío</span> iría <br>en la categoría <span style='color:yellow;font-weight:bold'>Masculino</span>, no en la categoría <span style='color:yellow;font-weight:bold'>Ciencias Sociales</span>.<br /><br />La etiqueta <span style='color:green;font-weight:bold'>verde</span> y <b>blanco</b> pueden ayudarlo a identificar la categoría apropiada. Use las teclas <span style='color:yellow;font-weight:bold'>E</span> e <span style='color:yellow;font-weight:bold'>I</span> para categorizar los cuatro grupos, para corregir los errores presione cualquier tecla." x=-480 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la barra espaciadora para comenzar." x=0 y=256 z_index=0
	draw rect color=white fill=0 h=128 penwidth=1 show_if=always w=256 x=-480 y=-352 z_index=0
	draw rect color=white fill=0 h=128 penwidth=1 show_if=always w=256 x=224 y=-352 z_index=0

define sequence combined_practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run combined_practice_association always
	run keyboard_response always
	run combined_practice_association_wrong "[correct] = 0"

define sequence combined_practice_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_3 always
	run combined_practice_association_2 always
	run keyboard_response_3 always
	run combined_practice_association_2_wrong "[correct] = 0"

define form_base contratacionPromocionPersonal
	set timeout infinite
	set spacing 25
	set rows "1;2;1"
	set only_render no
	set margins "50;100;50;100"
	set description "A generic form plug-in"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label center=no text="He percibido en mi entorno cercano e inclusive conmigo un trato menos favorable en la contratación y promoción hacia las mujeres."
	widget 0 1 1 1 button text="Me identifico"
	widget 1 1 1 1 button text="No me identifico"


define form_text_input edad
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Escribí con el teclado tu edad (en años cumplidos)"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input edicionDeMente
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Escribí con el teclado la edición de MenTe en la que participaste"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define form_multiple_choice etnia
	set timeout infinite
	set spacing 10
	set question Etnia
	__options__
	Indígena
	Asiática
	Negra o Afrodescendiente
	Blanca/caucásica
	Mixta
	Otro/No sabe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 subject 0
	run block_sequence

define sketchpad fixation
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_2
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_3
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define form_multiple_choice hijes
	set timeout infinite
	set spacing 10
	set question "¿Tenés hijos o hijas?"
	__options__
	Sí
	No
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence iat_sequence
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions never
	run instructions_1 never
	run subject_0 never
	run new_sketchpad never
	run subject_1 never
	run subject_2 never
	run subject_3 never
	run afinidadCienciasBasicas always
	run new_form_multiple_choice always
	run new_form_base_1 always
	run interesCienciasBasicas always
	run tareasDomesticas always
	run reconocimientoEducativo always
	run motivacionFamiliar always
	run contratacionPromocionPersonal always
	run sexoAsignadoAlNacer always
	run identidadDeGenero always
	run edad always
	run edicionDeMente always
	run etnia always
	run ocupacion always
	run religiosidad always
	run paisDeNacionalidad always
	run paisDeResidencia always
	run provincia always
	run canton always
	run cantonAnterior always
	run sistemaDeEducacion always
	run carrera1 always
	run carrera2 always
	run principalSustento always
	run hijes always
	run TAIprevios always
	run end_of_experiment always

define form_multiple_choice identidadDeGenero
	set timeout infinite
	set spacing 10
	set question "Identidad de género actual"
	__options__
	Mujer
	Hombre
	Mujer trans
	Hombre trans
	No binario
	Queer
	Intersex
	Otro
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop initial_category
	set source_file "CSV - initial category.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Niña
	setcycle 0 category Femenino
	setcycle 0 correct_response i
	setcycle 1 stimuli Femenino
	setcycle 1 category Femenino
	setcycle 1 correct_response i
	setcycle 2 stimuli Tía
	setcycle 2 category Femenino
	setcycle 2 correct_response i
	setcycle 3 stimuli Hija
	setcycle 3 category Femenino
	setcycle 3 correct_response i
	setcycle 4 stimuli Esposa
	setcycle 4 category Femenino
	setcycle 4 correct_response i
	setcycle 5 stimuli Mujer
	setcycle 5 category Femenino
	setcycle 5 correct_response i
	setcycle 6 stimuli Madre
	setcycle 6 category Femenino
	setcycle 6 correct_response i
	setcycle 7 stimuli Abuela
	setcycle 7 category Femenino
	setcycle 7 correct_response i
	setcycle 8 stimuli Hombre
	setcycle 8 category Masculino
	setcycle 8 correct_response e
	setcycle 9 stimuli Niño
	setcycle 9 category Masculino
	setcycle 9 correct_response e
	setcycle 10 stimuli Padre
	setcycle 10 category Masculino
	setcycle 10 correct_response e
	setcycle 11 stimuli Masculino
	setcycle 11 category Masculino
	setcycle 11 correct_response e
	setcycle 12 stimuli Abuelo
	setcycle 12 category Masculino
	setcycle 12 correct_response e
	setcycle 13 stimuli Esposo
	setcycle 13 category Masculino
	setcycle 13 correct_response e
	setcycle 14 stimuli Hijo
	setcycle 14 category Masculino
	setcycle 14 correct_response e
	setcycle 15 stimuli Tío
	setcycle 15 category Masculino
	setcycle 15 correct_response e
	run initial_category_sequence

define sketchpad initial_category_association
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-384 y=-256 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad initial_category_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-384 y=-256 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<span style='color:yellow;font-weight:bold'>Fíjese arriba, las categorías cambiaron.</span> Los items para clasificar también cambiaron. Las reglas son las mismas. <br /><br />Cuando los items pertenecen a la categoría de la izquierda, presione la tecla E; cuando el item pertenece a una categoría a la derecha, <br>presione la tecla I. Los items pertenecen a una sola categoría. Una <span style='color:red;font-weight:bold'>X</span> aparecerá después de un error, corrija el error presionando cualquier tecla.<span style='color:yellow;font-weight:bolder'>Sea tan rápido(a) como le sea posible.</span> " x=-480 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la barra espaciadora para comenzar." x=0 y=288 z_index=0
	draw rect color=white fill=0 h=64 penwidth=1 show_if=always w=192 x=-480 y=-288 z_index=0
	draw rect color=white fill=0 h=64 penwidth=1 show_if=always w=192 x=256 y=-288 z_index=0

define sequence initial_category_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run initial_category_association always
	run keyboard_response always
	run initial_target_association_wrong_1 "[correct] = 0"

define loop initial_target
	set source_file "CSV - initial target.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 13
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Filosofía
	setcycle 0 category "Ciencias Sociales"
	setcycle 0 correct_response e
	setcycle 1 stimuli Humanidades
	setcycle 1 category "Ciencias Sociales"
	setcycle 1 correct_response e
	setcycle 2 stimuli Arte
	setcycle 2 category "Ciencias Sociales"
	setcycle 2 correct_response e
	setcycle 3 stimuli Literatura
	setcycle 3 category "Ciencias Sociales"
	setcycle 3 correct_response e
	setcycle 4 stimuli Música
	setcycle 4 category "Ciencias Sociales"
	setcycle 4 correct_response e
	setcycle 5 stimuli Historia
	setcycle 5 category "Ciencias Sociales"
	setcycle 5 correct_response e
	setcycle 6 stimuli Biología
	setcycle 6 category "Ciencias Exactas"
	setcycle 6 correct_response i
	setcycle 7 stimuli Física
	setcycle 7 category "Ciencias Exactas"
	setcycle 7 correct_response i
	setcycle 8 stimuli Química
	setcycle 8 category "Ciencias Exactas"
	setcycle 8 correct_response i
	setcycle 9 stimuli Matemáticas
	setcycle 9 category "Ciencias Exactas"
	setcycle 9 correct_response i
	setcycle 10 stimuli Geología
	setcycle 10 category "Ciencias Exactas"
	setcycle 10 correct_response i
	setcycle 11 stimuli Astronomía
	setcycle 11 category "Ciencias Exactas"
	setcycle 11 correct_response i
	setcycle 12 stimuli Ingienería
	setcycle 12 category "Ciencias Exactas"
	setcycle 12 correct_response i
	run initial_target_sequence

define sketchpad initial_target_association
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad initial_target_association_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ponga su dedo medio o su dedo indice en la letra <span style='color:yellow;font-weight:bolder'>E</span> y en la letra <span style='color:yellow;font-weight:bolder'>I</span> de su teclado. En el borde superior van a aparecer palabras representando las categorías. Cuando el item pertenece a la categoría en la izquierda, presione la letra E; cuando el item pertenezca a una categoría en la derecha, presione la letra I. Los items pertenecen a una sola categoría. Si cometió un error una <span style='color:red;font-weight:bolder'>X</span> aparecerá en la pantalla. Corrija el error presionando cualquier otra tecla.<br /><br />Este es un ejercicio de clasificación cronometrada. <b>Realice la tarea tan rápido como pueda cometiendo la menor cantidad de errores posibles</b>. Ir muy lento o cometer demasiados errores tendrá como consecuencia un resultado que no pueda ser interpretado. El test tomará aproximadamente 10 minutos." x=-448 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la <b>barra espaciadora</b> para comenzar." x=0 y=256 z_index=0
	draw rect color=white fill=0 h=64 penwidth=1 show_if=always w=256 x=-480 y=-288 z_index=0
	draw rect color=white fill=0 h=64 penwidth=1 show_if=always w=256 x=224 y=-288 z_index=0

define sketchpad initial_target_association_wrong
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define sketchpad initial_target_association_wrong_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Masculino x=-352 y=-256 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text=Femenino x=352 y=-256 z_index=0
	draw textline center=1 color="#008000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define sequence initial_target_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation always
	run initial_target_association always
	run keyboard_response always
	run initial_target_association_wrong "[correct] = 0"

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Presione cualquier tecla para continuar" x=0 y=160 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Usted ha elegido completar el siguiente test: TAI Género-Ciencia<br /><br />Es este estudio completará un Test de Asociación Implícita (TAI) en el<br> que se le pedirá que clasifique imágenes y palabras en grupos lo más<br> rápido posible. <br /><br />Además del TAI, hay algunas preguntas sobre sus creencias, actitudes y opiniones, y algunas preguntas demográficas estándar.<br /><br />Este estudio tardará cerca de 10 minutos en completarse.<br /><br />¡Le agradecemos por estar acá!" x=-480 y=-320 z_index=0

define sketchpad instructions_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<b>Presione cualquier tecla para continuar</b>" x=0 y=320 z_index=0
	draw image center=1 file="categorias.png" scale=1 show_if=always x=0 y=-96 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=21 html=yes show_if=always text="En el próximo paso, se le darán palabras para que clasifique en grupos. El test requiere que clasifique los items tan rápido como le sea posible cometiendo la mínima cantidad de errores. Si realiza el test muy despacio o si comete muchos errores va a dar un resultado ininterpretable.<br />La lista a continuación menciona las categorías y los ítems que pertenecen a cada una de ellas." x=-480 y=-352 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="<span style='font-size:24px;'>Tenga en cuenta:</span><br /><br />- Ubique sus dedos índice en las letras <span style='color:yellow;font-size:26px;'>E</span> y en la <span style='color:yellow;font-size:26px;'>I</span> para facilitar una respuesta rápida.<br />- Las palabras en la parte superior le informarán que palabras tiene que asociar.<br />- <span style='color:yellow;'>Cada palabra tiene una categoría correcta</span>, siendo la mayoría fáciles.<br />- <span style='color:yellow;'>El test no dará ningún resultado si va demasiado lento</span>, por lo que trate de ir tan rápido como le sea posible.<br />- <span style='color:yellow;'>Es de esperar cometa algunos errores</span> si va muy rápido, no hay ningún problema.<br />- Para mejores resultados, <span style='color:yellow;'>evite las distracciones y permanezca concentrado(a)</span>." x=-480 y=0 z_index=0

define form_base interesCienciasBasicas
	set timeout infinite
	set spacing 25
	set rows "1;2;1"
	set only_render no
	set margins "50;100;50;100"
	set description "Preguntas de realidad y Mapeo de Obstáculos"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label center=no text="Mi interés por las Ciencias Básicas no es muy alto."
	widget 0 1 1 1 button text="Me identifico"
	widget 1 1 1 1 button text="No me identifico"


define keyboard_response key_combined_critical_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "E;I"

define keyboard_response key_combined_critical_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "E;I"

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "E;I"

define keyboard_response keyboard_response_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "E;I"

define keyboard_response keyboard_response_3
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "E;I"

define form_base motivacionFamiliar
	set timeout infinite
	set spacing 25
	set rows "1;2;1"
	set only_render no
	set margins "50;100;50;100"
	set description "Preguntas de realidad y Mapeo de Obstáculos"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label center=no text="Directa o indirectamente, en mi familia me han desmotivado con respecto a estudiar y desarrollarme profesionalmente en el área de ciencias básicas"
	widget 0 1 1 1 button text="Me identifico"
	widget 1 1 1 1 button text="No me identifico"


define form_base new_form_base_1
	# Margins are defined as "top;right;bottom;left". Each value corresponds to a
	# margin in pixels.
	# The spacing is simply a value in pixels.
	# The sizes of the rows are relative. "1;2;1" means that there are three rows,
	# where the middle one is twice as large as the bottom and top ones. So "1;2;1"
	# means exactly the same thing as "3;6;3". Please note that "3" does not mean
	# that there are three equally-sized rows (but "1;1;1" does).
	# Columns are defined in the same way. "1;1" simply means that there
	# are two columns of the same size.
	# Widgets are defined as follows:
	# widget [column] [row] [column span] [row span] [widget type] [keywords]
	# 
	# The columns and rows start counting at 0. If you do not want to have your widget
	# span multiple columns and rows, you simply set the column and row span to 1.
	set timeout infinite
	set spacing 25
	set rows "1;1;1"
	set only_render no
	set margins "25;50;25;50"
	set description "Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	set cols "1;1;1;1;1"
	set allow_multiple no
	set advance_immediately yes
	set _theme gray
	widget 2 0 2 1 label center=no text="Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	widget 0 2 1 1 button text="Muy positiva"
	widget 1 2 1 1 button text=Positiva
	widget 2 2 1 1 button text="Ni positiva ni negativa"
	widget 3 2 1 1 button text=Negativa
	widget 4 2 1 1 button text="Muy negativa"


define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 8
	set question "Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	__options__
	Muy positiva
	Positiva
	Ni positiva ni negativa
	Negativa
	Muy negativa
	__end__
	set margins "25;25;25;25"
	set form_var response
	set form_title "Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	set description "A simple multiple choice item"
	set button_text Siguiente
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad new_sketchpad
	set duration keypress
	set description "Muestra estímulos"

define form_base nodesTrial
	# Margins are defined as "top;right;bottom;left". Each value corresponds to a
	# margin in pixels.
	# The spacing is simply a value in pixels.
	# The sizes of the rows are relative. "1;2;1" means that there are three rows,
	# where the middle one is twice as large as the bottom and top ones. So "1;2;1"
	# means exactly the same thing as "3;6;3". Please note that "3" does not mean
	# that there are three equally-sized rows (but "1;1;1" does).
	# Columns are defined in the same way. "1;1" simply means that there
	# are two columns of the same size.
	# Widgets are defined as follows:
	# widget [column] [row] [column span] [row span] [widget type] [keywords]
	# 
	# The columns and rows start counting at 0. If you do not want to have your widget
	# span multiple columns and rows, you simply set the column and row span to 1.
	set timeout infinite
	set spacing 25
	set rows "1;2;1"
	set only_render no
	set margins "10;20;10;20"
	set description "A generic form plug-in"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 0 2 1 label text=Question
	widget 0 1 2 1 label center=no text="Actitud con respecto a las Ciencias Básicas (Biología, Ciencias de la Salud, Física, Ingenierías, Química, etc):"
	widget 0 1 1 1 rating_scale click_accepts=no default=0 nodes="Muy Positiva;Positiva;Ni positiva ni negativa;Negativa;Muy Negativa" orientation=horizontal var=response


define form_multiple_choice ocupacion
	set timeout infinite
	set spacing 10
	set question "¿Cuál es tu ocupación?"
	__options__
	Estudia
	Trabaja
	Ninguna
	Ambas
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input paisDeNacionalidad
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "País de Nacionalidad"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input paisDeResidencia
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "País de Residencia"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_multiple_choice principalSustento
	set timeout infinite
	set spacing 10
	set question "El principal sustento de mi hogar es"
	__options__
	Mi mamá
	Mi papá
	Ambos (rol compartido)
	Yo
	Mi pareja
	Otro
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input provincia
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question Provincia
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_base reconocimientoEducativo
	set timeout infinite
	set spacing 25
	set rows "1;2;1"
	set only_render no
	set margins "50;100;50;100"
	set description "Preguntas de realidad y Mapeo de Obstáculos"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label center=no text="A lo largo de mi experiencia en el sistema de educación formal, he recibido poco reconocimiento y estímulo para desarrollar mi interés por las Ciencias Básicas"
	widget 0 1 1 1 button text="Me identifico"
	widget 1 1 1 1 button text="No me identifico"


define form_multiple_choice religiosidad
	set timeout infinite
	set spacing 10
	set question "Te considerás"
	__options__
	Altamente religiosa
	Moderadamente religiosa
	Ligeramente religiosa
	Del todo no religiosa
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop reversed_target
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 13
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Filosofía
	setcycle 0 category "Ciencias Sociales"
	setcycle 0 correct_response i
	setcycle 1 stimuli Humanidades
	setcycle 1 category "Ciencias Sociales"
	setcycle 1 correct_response i
	setcycle 2 stimuli Arte
	setcycle 2 category "Ciencias Sociales"
	setcycle 2 correct_response i
	setcycle 3 stimuli Literatura
	setcycle 3 category "Ciencias Sociales"
	setcycle 3 correct_response i
	setcycle 4 stimuli Música
	setcycle 4 category "Ciencias Sociales"
	setcycle 4 correct_response i
	setcycle 5 stimuli Historia
	setcycle 5 category "Ciencias Sociales"
	setcycle 5 correct_response i
	setcycle 6 stimuli Biología
	setcycle 6 category "Ciencias Exactas"
	setcycle 6 correct_response e
	setcycle 7 stimuli Física
	setcycle 7 category "Ciencias Exactas"
	setcycle 7 correct_response e
	setcycle 8 stimuli Química
	setcycle 8 category "Ciencias Exactas"
	setcycle 8 correct_response e
	setcycle 9 stimuli Matemáticas
	setcycle 9 category "Ciencias Exactas"
	setcycle 9 correct_response e
	setcycle 10 stimuli Geología
	setcycle 10 category "Ciencias Exactas"
	setcycle 10 correct_response e
	setcycle 11 stimuli Astronomía
	setcycle 11 category "Ciencias Exactas"
	setcycle 11 correct_response e
	setcycle 12 stimuli Ingienería
	setcycle 12 category "Ciencias Exactas"
	setcycle 12 correct_response e
	run reversed_target_sequence

define sketchpad reversed_target_association
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0

define sketchpad reversed_target_association_wrong
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[stimuli]" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0202" font_bold=yes font_family=mono font_italic=no font_size=60 html=yes show_if=always text=X x=0 y=96 z_index=0

define sketchpad reversed_target_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Sociales" x=352 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Ciencias Exactas" x=-352 y=-256 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="<span style='color:yellow;font-weight:bold'>Fíjese arriba, hay solo dos categorías y han cambiado las posiciones.</span> El concepto que estaba anteriormente a la izquierda se encuentra ahora a la derecha, y el que se encontraba a la derecha se encuentra ahora a la izquierda. Practique con la nueva configuración.<br /><br />Use las letras <span style='color:yellow;font-weight:bold'>E</span> e <span style='color:yellow;font-weight:bold'>I</span> para categorizar los conceptos derechos e izquierdos; para corregir los errores presione cualquier otra tecla." x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Presione la barra espaciadora para comenzar." x=0 y=256 z_index=0
	draw rect color=white fill=0 h=64 penwidth=1 show_if=always w=256 x=-480 y=-288 z_index=0
	draw rect color=white fill=0 h=64 penwidth=1 show_if=always w=256 x=224 y=-288 z_index=0
	draw arrow arrow_body_length=0.9000000000000001 arrow_body_width=0.15000000000000008 arrow_head_width=20 color=white fill=1 penwidth=1 show_if=always x1=-224 x2=224 y1=-288 y2=-288 z_index=0
	draw arrow arrow_body_length=0.9000000000000001 arrow_body_width=0.15000000000000008 arrow_head_width=20 color=white fill=1 penwidth=1 show_if=always x1=224 x2=-224 y1=-224 y2=-224 z_index=0

define sequence reversed_target_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_2 always
	run reversed_target_association always
	run keyboard_response_2 always
	run reversed_target_association_wrong "[correct] = 0"

define form_multiple_choice sexoAsignadoAlNacer
	set timeout infinite
	set spacing 10
	set question "Sexo asignado al nacer"
	__options__
	Mujer
	Hombre
	Intersex
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice sistemaDeEducacion
	set timeout infinite
	set spacing 10
	set question "Estudiás o estudiaste en un"
	__options__
	Colegio Público
	Colegio Privado
	Colegio Semiprivado
	Instituto
	Bachillerato por Madurez
	No estudié
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description Demographics
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence subject_0
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experimental_loop always

define sequence subject_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence subject_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence subject_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define form_base tareasDomesticas
	set timeout infinite
	set spacing 25
	set rows "1;2;1"
	set only_render no
	set margins "50;100;50;100"
	set description "Preguntas de realidad y Mapeo de Obstáculos"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label center=no text="En promedio, suelo dedicar mucho tiempo a mi familia y tengo responsabilidades dentro de mi familia/hogar sobretodo relacionadas a tareas domésticas."
	widget 0 1 1 1 button text="Me identifico"
	widget 1 1 1 1 button text="No me identifico"


define form_text_input textInputTrial
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "¿Cuál es "
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_javascript trial_scrolldown
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	var hyperlink = "https://efectoboomerang.limesurvey.net/153376"
	if (typeof jatos !== "undefined") {
	window.open(hyperlink + "/newtest.jatos.studyResultId/" + jatos.studyResultId)
	}
	__end__
	set _prepare ""

define keyboard_response wait_spacebar
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

